PsychoPy2experiment version="2021.1.2"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=4D95157C
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = arrow_simon_punish
  logging level = debug
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Routines
  Routine instructions
    TextComponent instruct_text
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        You are about to begin a block of trials in a timed arrow response game. You will respond to arrows like in the first block of practice trials, but you will need to time your responses perfectly, like in the second block of practice trials.

        As in the first practice block, at a random time during the trial, a white arrow will appear on the right or left side of the screen. You will next press a key to report the direction of the arrow.

        * If the arrow points RIGHT, press the P key with your RIGHT pointer finger.
        * If the arrow points LEFT, press the W key with your LEFT pointer finger.

        As in the second practice block, each trial you will see a black cross in the center of the screen. The cross will turn into a black dot that flashes three times. After the third flash, a WHITE DOT will appear at the center of the screen.

        Please respond exactly when the WHITE DOT appears.

        **IMPORTANT INFORMATION ABOUT CASH BONUSES**

        You will begin with a cash bonus of +5 dollars. However, at the end of the experiment, one trial that you completed will be selected at random in a raffle. If you made the INCORRECT RESPONSE  on this randomly selected trial OR you responded at the INCORRECT TIME, then you will incur the CASH PENALTY associated with that trial.

        Cash penalties will be either minus 1 or minus 5 dollars from your initial endowment of 5 dollars.

        The penalty size will occasionally change between -1 and -5, but this amount of cash that you stand to lose will be presented in GREEN text at the start of each trial.

        When you are ready to begin the first block, please press the SPACE BAR.
    KeyboardComponent instruct_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine trial
    TextComponent punish_cue
      color = green
      letterHeight = 0.05
      pos = (0, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .6
      text [set every frame] = $punish_text
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    PolygonComponent fixation
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .6
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    PolygonComponent dot1
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .1
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    PolygonComponent dot2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = .1
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    PolygonComponent dot3
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 2
      stopVal [duration (s)] = .1
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    PolygonComponent dot4
      fillColor = $[1,1,1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 2.5
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    ImageComponent target
      durationEstim = 1.1
      image [set every repeat] = $target_file
      size = (0.1, 0.1)
      startEstim = 1.5
      startVal [time (s)] = $target_onset
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    KeyboardComponent trial_resp
      allowedKeys = 'w','p','esc'
      correctAns = $target_resp
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      store = first key
      storeCorrect = True
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    CodeComponent trial_code
      Code Type = JS
      Begin JS Experiment:
        errs = [];
        puns = [];
        too_slows = [];
        too_soons = [];
      Begin JS Routine:
        target.setPos(eval(target_pos));
        target_onset = 1.5 + Math.random();
        punish_text = ("-$" + punish.toString());
      End JS Routine:
        rt = trial_resp.rt;
        if (((rt >= 1.4) && (rt <= 1.6))) {
            too_slow = false;
            too_soon = false;
            if ((trial_resp.corr === 1)) {
                err = 0;
            } else {
                err = 1;
            }
        } else {
            if ((rt > 1.6)) {
                too_slow = true;
                too_soon = false;
                err = 1;
            } else {
                too_slow = false;
                too_soon = true;
                err = 1;
            }
        }
        if (too_slow) {
            feedback_test_msg = "Too Slow";
            feedback_duration = 1;
        } else {
            if (too_soon) {
                feedback_test_msg = "Too Fast";
                feedback_duration = 1;
            } else {
                feedback_test_msg = " ";
                feedback_duration = 1;
            }
        }

        errs.push(err);
        puns.push(punish);

        psychoJS.experiment.addData("target_onset", target_onset);
        psychoJS.experiment.addData("err", err);
        psychoJS.experiment.addData("pun", punish);
  Routine feedback
    TextComponent feedback_text
      color [set every repeat] = $feedback_color
      letterHeight = 0.05
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [time (s)] = .4
      text [set every repeat] = $feedback_msg
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  Routine feedback_timing
    TextComponent feedback_text_timing
      color [set every repeat] = $feedback_color
      durationEstim = 1
      letterHeight = 0.05
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $feedback_msg
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  Routine block_note
    TextComponent block_one_text
      color = black
      letterHeight = 0.025
      startVal [condition] = block_one
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      text:
        Congrats. You completed block 1 of 10. Feel free to relax for a moment. And remember:

        * If the arrow points RIGHT, press the P key with your RIGHT pointer finger, and
        * If the arrow points LEFT, press the W key with your LEFT pointer finger, and
        * Please respond exactly when the WHITE DOT appears.

        Press the SPACE BAR when you are ready to continue.
    TextComponent block_later_text
      color = black
      letterHeight = 0.025
      startVal [condition] = $block_later
      text [set every repeat] = $block_note_text_msg
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    KeyboardComponent block_note_resp
      allowedKeys = 'space','esc'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent block_note_code
      Code Type = JS
      Begin JS Experiment:
        block_num = 1;
        block_one = true;
        block_nums = [];
      End JS Routine:
        block_num += 1;
        block_later = true;
        block_one = false;

        block_note_text_msg = (("Congrats. You completed block " + block_num.toString()) + " of 10. Feel free to relax for a moment. And remember: \n\n* If the arrow points RIGHT, press the P key with your RIGHT pointer finger, and\n* If the arrow points LEFT, press the W key with your LEFT pointer finger, and\n*Please respond exactly when the WHITE DOT appears.\n\nPress the SPACE BAR when you are ready to continue.");

        block_nums.push(block_num);
        psychoJS.experiment.addData('block_num', block_num);
  Routine demographics
  Routine instructions_simon
    TextComponent instruct_text_simon
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        You are about to begin a block of practice trials in a simple arrow response game.

        In each trial, you will stare at a white cross in the center of the screen.

        At a random time during the trial, a white arrow will appear on the right or left side of the screen. You will next press a key to report the direction of the arrow.

        * If the arrow points RIGHT, press the P key with your RIGHT pointer finger.
        * If the arrow points LEFT, press the W key with your LEFT pointer finger.

        After each trial, you will receive feedback about how you did. Please try to respond as quickly and accurately as you can.

        When you are ready to begin the block of practice trials, please press the SPACE BAR.
    KeyboardComponent instruct_resp_simon
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine instructions_timing
    TextComponent instruct_text_timing
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        You are about to begin a block of practice trials in a rapid response timing game.

        In this block, there are no colors that you need to respond to. Instead, in each trial you will see a black cross in the center of the screen. Next, the cross will turn into a black dot that flashes three times. After the third flash, a WHITE DOT will appear at the center of the screen.

        Your new goal is to respond exactly when you see the WHITE DOT.

        You can press the P key with your RIGHT index finger or the W key with your left index finger.

        We recommend that you alternate between left and right to practice your timing with both hands.

        After each trial, you will get feedback about how you did.

        We will tell you if you were too slow or too fast.

        When you are ready to begin this block of practice trials, please press the SPACE BAR.
    KeyboardComponent instruct_resp_timing
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine trial_train_simon
    PolygonComponent fixation_simon
      durationEstim = 1
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent target_simon
      durationEstim = 1
      image [set every repeat] = $target_file
      size = (0.1, 0.1)
      startEstim = 0
      startVal [time (s)] = $target_onset
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    KeyboardComponent trial_resp_simon
      allowedKeys = 'w','p','esc'
      correctAns = $target_resp
      durationEstim = 1
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
      storeCorrect = True
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    CodeComponent trial_code_simon
      Code Type = Auto->JS
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      Begin Routine:
        target.setPos(eval(target_pos))
        target_onset = 0.5
      End Routine:
        if trial_resp_simon.corr == 1:
            feedback_msg = "Correct!"
            feedback_color = "green"
        else:
            feedback_msg = "Incorrect."
            feedback_color = "red"
    PolygonComponent target_simon_old
      disabled = True
      durationEstim = 1
      fillColor [set every repeat] = $target_color
      lineColor [set every repeat] = $target_color
      nVertices = 100
      shape = regular polygon...
      size = (0.1, 0.1)
      startEstim = 0
      startVal [time (s)] = $target_onset
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  Routine trial_train_timing
    PolygonComponent fixation_timing
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .6
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    PolygonComponent dot1_timing
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .1
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    PolygonComponent dot2_timing
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = .1
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    PolygonComponent dot3_timing
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 2
      stopVal [duration (s)] = .1
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    PolygonComponent dot4_timing
      fillColor = $[1,1,1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = .1
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    KeyboardComponent trial_resp_timing
      allowedKeys = 'p','w','esc'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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    CodeComponent trial_code_timing
      Code Type = Auto->JS
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      End Routine:
        rt = trial_resp_timing.rt

        if rt < 2.4:
            feedback_msg = "Too fast."
            feedback_color = "red"
        elif rt > 2.6:
            feedback_msg = "Too slow."
            feedback_color = "red"
        elif rt >= 2.4 and rt <= 2.6:
            feedback_msg = "Perfect timing!"
            feedback_color = "green"
        else:
            feedback_msg = "No response."
            feedback_color = "red"
  Routine completion
    TextComponent complete_text
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every frame] = $complete_msg
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    KeyboardComponent complete_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent complete_code
      Code Type = JS
      Begin JS Routine:
        N_trials = 16; //599; reduced for testing....
        rand_trial = Math.floor(Math.random()*N_trials);
        rand_err = errs[rand_trial];
        rand_rew = 5 - (puns[rand_trial] * rand_err);
        trial_msg = (((("Trial number " + rand_trial.toString()) + " was selected at random. This trial was worth -") + puns[rand_trial].toString()) + " US dollars. ");
        if ((rand_err == 0)) {
            acc_msg = "You responded correctly on this trial. ";
        } else {
            acc_msg = "You responded incorrectly on this trial. ";
        }
        rew_msg = (("You earned a cash bonus of " + rand_rew.toString()) + " US dollars. ");
        space_msg = "Please press the space bar to conclude this experiment. ";
        complete_msg = (((trial_msg + acc_msg) + rew_msg) + space_msg);
        console.log(rand_trial);
        console.log(rand_err);
        console.log(rand_rew);
        console.log(complete_msg);
      End JS Routine:
        psychoJS.experiment.addData("raffle_trial", rand_trial);
        psychoJS.experiment.addData("raffle_err", rand_err);
        psychoJS.experiment.addData("raffle_rew", rand_rew);
  Routine completion_survey
  Routine feedback_2
  Routine feedback_test
    TextComponent feedback_test_text
      color = red
      durationEstim = 1
      letterHeight = 0.05
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every frame] = $feedback_test_msg
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  Routine completion_2
    TextComponent complete_text_2
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = $complete_msg
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    KeyboardComponent complete_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent complete_code_2
      Code Type = Auto->JS
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Flow
  Routine instructions_simon
  LoopInitiator trials_train_simon loopType="TrialHandler"
    conditionsFile = trial_conditions.csv
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('target_file', 'right.png'), ('target_pos', [-0.33, 0]), ('target_resp', 'p')]),
      OrderedDict([('target_file', 'right.png'), ('target_pos', [0.33, 0]), ('target_resp', 'p')]),
      OrderedDict([('target_file', 'left.png'), ('target_pos', [-0.33, 0]), ('target_resp', 'w')]),
      OrderedDict([('target_file', 'left.png'), ('target_pos', [0.33, 0]), ('target_resp', 'w')])]
    Routine trial_train_simon
    Routine feedback
  LoopTerminator trials_train_simon
  Routine instructions_timing
  LoopInitiator trials_train_timing loopType="TrialHandler"
    loopType = sequential
    nReps = 60
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    Routine trial_train_timing
    Routine feedback_timing
  LoopTerminator trials_train_timing
  Routine instructions
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = block_conditions.csv
    isTrials = False
    loopType = sequential
    nReps = 5
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    conditions:
      [OrderedDict([('punish', 1)]),
      OrderedDict([('punish', 5)])]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = trial_conditions.csv
      loopType = fullRandom
      nReps = 15
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      conditions:
        [OrderedDict([('target_file', 'right.png'), ('target_pos', [-0.33, 0]), ('target_resp', 'p'), ('target_side', 'left')]),
        OrderedDict([('target_file', 'right.png'), ('target_pos', [0.33, 0]), ('target_resp', 'p'), ('target_side', 'right')]),
        OrderedDict([('target_file', 'left.png'), ('target_pos', [-0.33, 0]), ('target_resp', 'w'), ('target_side', 'left')]),
        OrderedDict([('target_file', 'left.png'), ('target_pos', [0.33, 0]), ('target_resp', 'w'), ('target_side', 'right')])]
      Routine trial
      Routine feedback_test
    LoopTerminator trials
    Routine block_note
  LoopTerminator blocks
  Routine completion
